PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = bhakti_stroopeffect
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome 
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  Routine thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thankyou
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_lab.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'color': 'red', 'stim_cond': 'c', 'correct_res': 'r'},
      {'word': 'RED', 'color': 'blue', 'stim_cond': 'i', 'correct_res': 'b'},
      {'word': 'BLUE', 'color': 'red', 'stim_cond': 'i', 'correct_res': 'r'},
      {'word': 'BLUE', 'color': 'blue', 'stim_cond': 'c', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thankyou
