PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment trial_1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent item01
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim01
    TextComponent item02
      letterHeight = 0.05
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim02
    TextComponent item03
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim03
    TextComponent item04
      letterHeight = 0.05
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim04
    TextComponent item05
      letterHeight = 0.05
      startVal [time (s)] = 1.50
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim05
    TextComponent item06
      letterHeight = 0.05
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim06
    TextComponent item07
      letterHeight = 0.05
      startVal [time (s)] = 2.00
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim07
    TextComponent item08
      letterHeight = 0.05
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim08
    TextComponent item09
      letterHeight = 0.05
      startVal [time (s)] = 2.50
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim09
    TextComponent item10
      letterHeight = 0.05
      startVal [time (s)] = 2.75
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim10
    TextComponent item11
      letterHeight = 0.05
      startVal [time (s)] = 3.00
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim11
    TextComponent item12
      letterHeight = 0.05
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 0.25
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      text [set every repeat]:
        $stim12
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
  Routine instructions
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a fast stream of letters. Two numbers in the stream are the targets (T1 and T2).
        After the stream, type the FIRST target (T1) and press Enter, then type the SECOND target (T2) and press Enter.
        Press SPACE to begin.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thanks! Press any key to finish.
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    KeyboardComponent end_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T1_response
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    TextComponent respInstr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Type the FIRST target (T1) and press Enter. 
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    TextComponent t1Prompt
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
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      text:
        T1:
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.1, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T2_response
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    TextComponent resplnstr_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Type the SECOND target (T2) and press Enter. 
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    TextComponent t2Prompt
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
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      text:
        T2:
    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.1, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = attentional_blink_12trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim01': 'S', 'stim02': 'X', 'stim03': 'U', 'stim04': 'X', 'stim05': 4.0, 'stim06': 8.0, 'stim07': 'O', 'stim08': 'W', 'stim09': 'F', 'stim10': 'L', 'stim11': 'H', 'stim12': 'S', 'stim13': 'E', 'stim14': 'U', 'stim15': 'F', 'stim16': 'Z', 'lag': 1},
      {'stim01': 'O', 'stim02': 'E', 'stim03': 'D', 'stim04': 'F', 'stim05': 2.0, 'stim06': 'S', 'stim07': 'G', 'stim08': 3.0, 'stim09': 'Z', 'stim10': 'I', 'stim11': 'F', 'stim12': 'X', 'stim13': 'H', 'stim14': 'S', 'stim15': 'J', 'stim16': 'H', 'lag': 3},
      {'stim01': 'S', 'stim02': 'X', 'stim03': 'D', 'stim04': 'O', 'stim05': 2.0, 'stim06': 'L', 'stim07': 'T', 'stim08': 'F', 'stim09': 'Z', 'stim10': 'A', 'stim11': 4.0, 'stim12': 'A', 'stim13': 'T', 'stim14': 'G', 'stim15': 'I', 'stim16': 'Z', 'lag': 6},
      {'stim01': 'W', 'stim02': 'L', 'stim03': 'A', 'stim04': 'X', 'stim05': 2.0, 'stim06': 6.0, 'stim07': 'V', 'stim08': 'E', 'stim09': 'F', 'stim10': 'H', 'stim11': 'V', 'stim12': 'K', 'stim13': 'S', 'stim14': 'J', 'stim15': 'B', 'stim16': 'K', 'lag': 1},
      {'stim01': 'R', 'stim02': 'C', 'stim03': 'T', 'stim04': 'U', 'stim05': 6.0, 'stim06': 'Z', 'stim07': 'R', 'stim08': 2.0, 'stim09': 'U', 'stim10': 'U', 'stim11': 'D', 'stim12': 'Q', 'stim13': 'D', 'stim14': 'R', 'stim15': 'W', 'stim16': 'N', 'lag': 3}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
    Routine trial
    Routine T1_response
    Routine T2_response
  LoopTerminator trialsLoop
  Routine end
